//	DataPro
//	DAC/ADC macros for use with Igor Pro and the ITC-16 or ITC-18
//	Nelson Spruston
//	Northwestern University
//	project began 10/27/1998

//	Use this file to set all of your preferences for DataPro

#pragma rtGlobals=1		// Use modern global access method.

Function SetupDigitizerForMe()
	// USER: DON'T CHANGE THE NEXT TWO LINES
	String savDF=GetDataFolder(1)
	SetDataFolder root:DP_DigitizerControl
	
	// DECLARE THE digitizer variables
	NVAR itc
	SVAR unitsCurrent, unitsVoltage
	WAVE adcGainCurrent
	WAVE adcGainVoltage
	WAVE dacGainCurrent
	WAVE dacGainVoltage
	WAVE dacMultiplier
	NVAR testadc
	NVAR testdac
	NVAR tpamp
	NVAR tpgate
	NVAR tpgateamp
	NVAR tpdur
	// Variables for the Data Pulse (StepPulse_DAC)
	NVAR dplow
	NVAR dphigh
	NVAR dpshort
	NVAR dplong
	NVAR dpamp
	NVAR dpdur
	// Variables for synaptic stimulation
	NVAR syntime
	NVAR syndur
	
//	Set the units you will be working in for current and voltage
//	It is extremely important that you set the gains using the units you designate below
//	For example, if you want to work in pA for current units,
//	but your amplifier says the gain is 1 V/nA, you need to set the gain to 0.001 (V/pA)
	unitsCurrent="pA"
	unitsVoltage="mV"
//	set up the dac and adc channels and gains (default values)
////	setup the DAC/ADC channels used for voltage clamp and current clamp
//	dac_current=0
//	dac_voltage=0
//	adc_current=0
//	adc_voltage=1
//	read DACgain values off the appropriate external command on the amplifier
//	for voltage clamp, units are unitsVoltage/V
	dacGainCurrent[0]=10000
	dacGainCurrent[1]=10000
	dacGainCurrent[2]=10000		// for Isolator-10, make it 0.001, units are mA/V
	dacGainCurrent[3]=10000
//	for current clamp, units are unitsCurrent/V
	dacGainVoltage[0]=20
	dacGainVoltage[1]=20	
	dacGainVoltage[2]=20
	dacGainVoltage[3]=20
//	multiplier values for dacs
	dacMultiplier[0]=1
	dacMultiplier[1]=1
	dacMultiplier[2]=1
	dacMultiplier[3]=1
//	read ADCgain values off the appropriate output on the amplifier
//	don't forget filter gain and appropriate units conversion
//	for voltage clamp, units are volts/unitsCurrent 
	adcGainCurrent[0]=0.0001
	adcGainCurrent[1]=0.0001
	adcGainCurrent[2]=0.0001
	adcGainCurrent[3]=0.0001
	adcGainCurrent[4]=0.0001
	adcGainCurrent[5]=0.0001
	adcGainCurrent[6]=0.0001
	adcGainCurrent[7]=0.0001
//	for current clamp, units are volts/unitsVoltage
	adcGainVoltage[0]=0.01
	adcGainVoltage[1]=0.01
	adcGainVoltage[2]=0.01
	adcGainVoltage[3]=0.01
	adcGainVoltage[4]=0.01
	adcGainVoltage[5]=0.01
	adcGainVoltage[6]=0.01
	adcGainVoltage[7]=0.01
//	Variables related to the Test Pulse
	testadc=0			// display ADC in test pulse window
	testdac=0			// output DAC for test pulse
	tpamp=1
	tpgate=5000
	tpgateamp=10
	tpdur=10
//	Variables for the Data Pulse (StepPulse_DAC)
	dplow=1
	dphigh=200
	dpshort=50
	dplong=1000
	dpamp=dplow
	dpdur=dplong
//	Variables for synaptic stimulation
	syntime=50
	syndur=0.1
////	Variables for LTP analysis
//	SetDataFolder root:DP_Analysis
//	slope_left=8
//	slope_right=30
//	ltp_interval=10
////	Variables for analysis display
//	SetDataFolder root:DP_Browser
//	ymax=3
//	ymin=-3
//	xmin=0
//	xmax=100
//	acsrx=0
//	bcsrx=0
	// USER: DON'T CHANGE ANYTHING BELOW HERE
	SetDataFolder savDF
End

